import ini.trakem2.display.*;
import ini.trakem2.io.CoordinateTransformXML;
import ij.*;
import org.janelia.saalfeldlab.n5.*;
import org.janelia.saalfeldlab.n5.hdf5.*;
import org.janelia.saalfeldlab.n5.imglib2.*;

import ch.systemsx.cisd.hdf5.HDF5Factory;
import ch.systemsx.cisd.hdf5.IHDF5Reader;
import ch.systemsx.cisd.hdf5.IHDF5Writer;

//for (int z = 1; z < 2; ++z) {
hdf5Writer = HDF5Factory.open("Y:/Chenghang/06_Testing/GUI_test/acquisition/bins/647storm_000_mlist.hdf5");
n5 = new N5HDF5Reader(hdf5Writer, new int[]{10000, 100, 100});
coordinates = new ArrayList();
for (frame : n5.list("/")) {
	if (frame.matches("^fr_.*")) {
		//IJ.log(frame + "");
		xs = N5Utils.open(n5, frame + "/x");
		ys = N5Utils.open(n5, frame + "/y");
		xCursor = xs.cursor();
		yCursor = ys.cursor();
		while (xCursor.hasNext()) {
			x = xCursor.next().get();
			y = yCursor.next().get();
			coordinates.add(new double[]{x*10,y*10});
		}
	}
}

/* find Transformation */
example_xml_path = "Y:\\Chenghang\\06_Testing\\GUI_test\\analysis\\elastic_align_pre\\trakem2.1670339457031.1864211504.1580600789\\trakem2.cts\\15.27.ct";
ct = CoordinateTransformXML.parse(example_xml_path);
	
/* loop over all coordinates and do */
for (coordinate : coordinates) {
	transformedCoordinate = ct.apply(coordinate);
	IJ.log(Arrays.toString(coordinate) + "," + Arrays.toString(transformedCoordinate));
}
print(coordinates.size());